CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DNA
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:DNA
    Conversion method:Split
    Image type::Channels
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    Channel count:2
    Channel number::Red: 1
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    Image name::Channel1
    Channel number::Green: 2
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    Image name::Channel2

GrayToColor:[module_num:3|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
    Select a color scheme:RGB
    Select the input image to be colored red:Channel1
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    Select the input image to be colored blue:Channel2
    Name the output image:ColorImagea
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
CorrectIlluminationCalculate:[module_num:4|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
    Select the input image:Channel1
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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    Automatically calculate spline parameters?:No
    Background mode:auto
    Number of spline points:10
    Background threshold:2
    Image resampling factor:2
    Maximum number of iterations:40
    Residual value for convergence:0.001

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Channel2
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Channel2
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Select the input image:Channel1
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract

Smooth:[module_num:7|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
    Select the input image:CorrRed
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:25
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
GrayToColor:[module_num:8|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
    Select a color scheme:RGB
    Select the input image to be colored red:CorrRed
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    Select the input image to be colored blue:CorrBlue
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Channel1
    Name the primary objects to be identified:UnCorrNuclei
    Typical diameter of objects, in pixel units (Min,Max):150,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RidlerCalvard Global
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:UnCorrOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:SmoothNuclei
    Typical diameter of objects, in pixel units (Min,Max):150,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RidlerCalvard Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:SmoothOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CorrRed
    Name the primary objects to be identified:CorrNuclei
    Typical diameter of objects, in pixel units (Min,Max):150,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RidlerCalvard Global
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:CorrOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:UnCorrOutlines
    Select outline color:Red
    Select outlines to display:CorrOutlines
    Select outline color:White
    Select outlines to display:SmoothOutlines
    Select outline color:Blue

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:bmp
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :Yes
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
